PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Aahna Sanyal_AU2010463_Project_PSY310
  keyboardBackend = ioHub
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Routines
  Routine Other_Player_Offer
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Player 2 Offer: " + str(Self) + " received" + " and "  + " other player received " + str(Other)
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    KeyboardComponent key_resp_3
      allowedKeys = 'a','r'
      correctAns = $Corr_Resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine Luck_Offer
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Luck Offer: " + str(Self) + " received" + " and "  + " other player received " + str(Other)
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    KeyboardComponent key_resp_2
      allowedKeys = 'a','r'
      correctAns = $Corr_Resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine Instructions
    PolygonComponent Commencer_3
      fillColor = 0.8824, 1.0000, 1.0000
      shape = star
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent Instruction
      letterHeight = 0.05
      startVal [time (s)] = 1.0
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      text:
        Instructions:
        20 dollars is to be split.
        You have two choices to make.
        First, You would be presented with a reward split based on luck.
        You can accept or reject it by pressing "a" or "r"
        The next condition choice is given to another player- they will decide the split.
        Whatever is offered could be accepted or rejected ("a" or "r"). However, in either two conditions if you decline the offer- both of you will receive nothing.
        Tread wisely.
        Press "space" to move forward.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Game_of_Luck
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Luck decides the split.
        Remember if you reject, both the players will receive nothing!

        Press "space" to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Their_Turn
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Here, the split is decided by the other player.
        You can accept or reject it.
        Nevertheless, if you choose to reject, nobody gets anything.

        Press "space" to continue
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Bonus_Question
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If the stakes were higher-
        For illustration 10000 dollars split decided by the proposer as-
        8000 (other player gain) and 2000 (offered to you)
        The rules remain the same.

        would you accept or reject the offer?

        Press "a" or "r" to respond
    KeyboardComponent key_resp_6
      allowedKeys = 'a','r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine Game_of_Luck
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = luck offer_commitment problem.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Luck_Offer': 'Offer ', 'Self': 5, 'Other': 15, 'Corr_Resp': 'a'},
      {'Luck_Offer': 'Offer', 'Self': 8, 'Other': 12, 'Corr_Resp': 'a'},
      {'Luck_Offer': 'Offer', 'Self': 16, 'Other': 4, 'Corr_Resp': 'a'},
      {'Luck_Offer': 'Offer', 'Self': 11, 'Other': 9, 'Corr_Resp': 'a'},
      {'Luck_Offer': 'Offer', 'Self': 1, 'Other': 19, 'Corr_Resp': 'a'}]
    Routine Luck_Offer
  LoopTerminator trials
  Routine Their_Turn
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = other_player_offer_commitment problem.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Player_Offer': 'Offer ', 'Self': 4, 'Other': 16, 'Corr_Resp': 'r'},
      {'Player_Offer': 'Offer ', 'Self': 10, 'Other': 10, 'Corr_Resp': 'a'},
      {'Player_Offer': 'Offer ', 'Self': 12, 'Other': 8, 'Corr_Resp': 'a'},
      {'Player_Offer': 'Offer ', 'Self': 9, 'Other': 11, 'Corr_Resp': 'a'},
      {'Player_Offer': 'Offer ', 'Self': 6, 'Other': 14, 'Corr_Resp': 'r'}]
    Routine Other_Player_Offer
  LoopTerminator trials_2
  Routine Bonus_Question
